PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = black
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  Experiment info = {u'gender': u'', u'age': u'', u'participant': u''}
  expName = RRT
  logging level = error
  Units = use prefs
  Save log file = False
  Screen = 1
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Routines
  Routine instructions4
    TextComponent instructions4box
      startVal [time (s)] = 0.75
      letterHeight = 0.05
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      text [set every repeat]:
        $instructions4
    KeyboardComponent instructions4key
      forceEndRoutine = True
      allowedKeys = 'e', 'i'
      startVal [time (s)] = 1.25
      store = nothing
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  Routine instructions5
    TextComponent instructions5box
      startVal [time (s)] = 0.75
      letterHeight = 0.05
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      text [set every repeat]:
        $instructions5
    KeyboardComponent instructions5key
      forceEndRoutine = True
      allowedKeys = 'e', 'i'
      startVal [time (s)] = 1.25
      store = nothing
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  Routine trialsRuleB
    TextComponent stimulusBoxB
      color [set every repeat] = $stimulusColour
      text [set every repeat] = $stimulus
      startVal [time (s)] = 0.3
      letterHeight = 0.1
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    KeyboardComponent requiredResponseKeyB
      correctAns = $requiredResponseB
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys [set every repeat] = requiredAllowedKeysB
      startVal [time (s)] = 0.3
      store = first key
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    KeyboardComponent feedbackResponseKeyB
      correctAns = $feedbackResponseB
      storeCorrect = True
      forceEndRoutine = False
      discard previous = False
      allowedKeys [set every repeat] = feedbackAllowedKeysB
      startVal [time (s)] = 0.3
      store = first key
    TextComponent correctiveFeedbackB
      color = red
      text [set every frame] = $msg
      pos = [0, -.5]
      startVal [time (s)] = 0.3
      letterHeight = 0.2
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    CodeComponent codeB
      Begin Experiment:
        msg=""
      Each Frame:
        if len(feedbackResponseKeyB.keys)<1:
            msg=""
        else:
            msg="X"
    TextComponent trueBoxB
      text = True
      pos = [0.75, 0.75]
      startVal [time (s)] = 0
      letterHeight = 0.1
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    TextComponent falseBoxB
      text = False
      pos = [-0.75, 0.75]
      startVal [time (s)] = 0
      letterHeight = 0.1
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  Routine instructions1
    TextComponent instructions1box
      startVal [time (s)] = 0.75
      letterHeight = 0.05
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      text [set every repeat]:
        $instructions1
    KeyboardComponent instructions1key
      forceEndRoutine = True
      allowedKeys = 'e', 'i'
      startVal [time (s)] = 1.25
      store = nothing
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  Routine instructions2
    TextComponent instructions2box
      text [set every repeat] = $instructions2
      startVal [time (s)] = 0.75
      letterHeight = 0.05
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    KeyboardComponent instructions2key
      forceEndRoutine = True
      allowedKeys = 'e', 'i'
      startVal [time (s)] = 1.25
      store = nothing
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  Routine instructions3
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  Routine trialsRuleA
    TextComponent stimulusBoxA
      color [set every repeat] = $stimulusColour
      text [set every repeat] = $stimulus
      startVal [time (s)] = 0.75
      letterHeight = 0.1
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    KeyboardComponent requiredResponseKeyA
      correctAns = $requiredResponseA
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys [set every repeat] = requiredAllowedKeysA
      startVal [time (s)] = 0.75
      store = first key
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    KeyboardComponent feedbackResponseKeyA
      correctAns = $feedbackResponseA
      storeCorrect = True
      forceEndRoutine = False
      discard previous = False
      allowedKeys [set every repeat] = feedbackAllowedKeysA
      startVal [time (s)] = 0.75
      store = first key
    TextComponent correctiveFeedbackA
      color = red
      text [set every frame] = $msg
      pos = [0, -.5]
      startVal [time (s)] = 0.75
      letterHeight = 0.2
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    CodeComponent codeA
      Begin Experiment:
        msg=""
      Each Frame:
        if len(feedbackResponseKeyA.keys)<1:
            msg=""
        else:
            msg="X"
    TextComponent trueBoxA
      text = True
      pos = [0.75, 0.75]
      startVal [time (s)] = 0
      letterHeight = 0.1
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    TextComponent falseBoxA
      text = False
      pos = [-0.75, 0.75]
      startVal [time (s)] = 0
      letterHeight = 0.1
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  Routine instructionsEnd
    TextComponent instructionsEndBox
      startVal [time (s)] = 0.75
      letterHeight = 0.05
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      text [set every repeat]:
        $instructionsEnd
    KeyboardComponent instructionsEndkey
      forceEndRoutine = True
      allowedKeys = 'e', 'i', 'return'
      startVal [time (s)] = 1.25
      store = nothing
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Flow
  LoopInitiator instructionsLoop loopType="TrialHandler"
    conditionsFile = instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
    conditions = [{u'instructions4': u'Very good!\n\nIMPORANT: THE RULE FOR THE BLUE STATEMENTS HAS NOW CHANGED.\n\nYou must respond AS IF you see yourself as a bad person and not a good person.\n\nPress the I key when the statement is TRUE according to the above rule.\nPress the E key when the statement is FALSE according to the above rule.\n\nFor example:\nWhen the proposition "I am valuable" appears, respond with the left response (FALSE).\nWhen the proposition "I am worthless" appears, respond with the right response (TRUE).\n\nIf you make a mistake, hit the correct key as soon as possible.\n\xa0\nPut your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    Routine instructions1
    LoopInitiator inducersLoop loopType="TrialHandler"
      conditionsFile = stimuli.xlsx
      loopType = random
      nReps = 2
      Selected rows = 0:20
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      conditions:
        [{u'stimulus': u'True', u'requiredResponseRuleA': u'i', u'stimulusColour': u'orange', u'requiredResponseRuleB': u'e'},
        {u'stimulus': u'Correct', u'requiredResponseRuleA': u'i', u'stimulusColour': u'orange', u'requiredResponseRuleB': u'e'},
        {u'stimulus': u'False', u'requiredResponseRuleA': u'e', u'stimulusColour': u'orange', u'requiredResponseRuleB': u'i'},
        {u'stimulus': u'Incorrect', u'requiredResponseRuleA': u'e', u'stimulusColour': u'orange', u'requiredResponseRuleB': u'i'},
        {u'stimulus': u'I am good', u'requiredResponseRuleA': u'i', u'stimulusColour': u'cyan', u'requiredResponseRuleB': u'e'},
        {u'stimulus': u'I am valuable', u'requiredResponseRuleA': u'i', u'stimulusColour': u'cyan', u'requiredResponseRuleB': u'e'},
        {u'stimulus': u'I am worthwhile', u'requiredResponseRuleA': u'i', u'stimulusColour': u'cyan', u'requiredResponseRuleB': u'e'},
        {u'stimulus': u'I am bad', u'requiredResponseRuleA': u'e', u'stimulusColour': u'cyan', u'requiredResponseRuleB': u'i'},
        {u'stimulus': u'I am a failure', u'requiredResponseRuleA': u'e', u'stimulusColour': u'cyan', u'requiredResponseRuleB': u'i'},
        {u'stimulus': u'I am worthless', u'requiredResponseRuleA': u'e', u'stimulusColour': u'cyan', u'requiredResponseRuleB': u'i'},
        {u'stimulus': u'I am not good', u'requiredResponseRuleA': u'e', u'stimulusColour': u'cyan', u'requiredResponseRuleB': u'i'},
        {u'stimulus': u'I am not valuable', u'requiredResponseRuleA': u'e', u'stimulusColour': u'cyan', u'requiredResponseRuleB': u'i'}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
      Routine trialsRuleA
    LoopTerminator inducersLoop
    Routine instructions2
    LoopInitiator stimuliRuleALoop loopType="TrialHandler"
      conditionsFile = stimuli.xlsx
      loopType = random
      nReps = 1
      Selected rows = 20:40
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      conditions:
        [{u'stimulus': u'True', u'requiredResponseRuleA': u'i', u'stimulusColour': u'orange', u'requiredResponseRuleB': u'e'},
        {u'stimulus': u'Correct', u'requiredResponseRuleA': u'i', u'stimulusColour': u'orange', u'requiredResponseRuleB': u'e'},
        {u'stimulus': u'False', u'requiredResponseRuleA': u'e', u'stimulusColour': u'orange', u'requiredResponseRuleB': u'i'},
        {u'stimulus': u'Incorrect', u'requiredResponseRuleA': u'e', u'stimulusColour': u'orange', u'requiredResponseRuleB': u'i'},
        {u'stimulus': u'I am good', u'requiredResponseRuleA': u'i', u'stimulusColour': u'cyan', u'requiredResponseRuleB': u'e'},
        {u'stimulus': u'I am valuable', u'requiredResponseRuleA': u'i', u'stimulusColour': u'cyan', u'requiredResponseRuleB': u'e'},
        {u'stimulus': u'I am worthwhile', u'requiredResponseRuleA': u'i', u'stimulusColour': u'cyan', u'requiredResponseRuleB': u'e'},
        {u'stimulus': u'I am bad', u'requiredResponseRuleA': u'e', u'stimulusColour': u'cyan', u'requiredResponseRuleB': u'i'},
        {u'stimulus': u'I am a failure', u'requiredResponseRuleA': u'e', u'stimulusColour': u'cyan', u'requiredResponseRuleB': u'i'},
        {u'stimulus': u'I am worthless', u'requiredResponseRuleA': u'e', u'stimulusColour': u'cyan', u'requiredResponseRuleB': u'i'},
        {u'stimulus': u'I am not good', u'requiredResponseRuleA': u'e', u'stimulusColour': u'cyan', u'requiredResponseRuleB': u'i'},
        {u'stimulus': u'I am not valuable', u'requiredResponseRuleA': u'e', u'stimulusColour': u'cyan', u'requiredResponseRuleB': u'i'}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
      Routine trialsRuleA
    LoopTerminator stimuliRuleALoop
    Routine instructions3
    LoopInitiator inducersAndStimuliRuleALoop loopType="TrialHandler"
      conditionsFile = stimuli.xlsx
      loopType = random
      nReps = 2
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      conditions:
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      Routine trialsRuleA
    LoopTerminator inducersAndStimuliRuleALoop
    Routine instructions4
    LoopInitiator stimuliRuleBLoop loopType="TrialHandler"
      conditionsFile = stimuli.xlsx
      loopType = random
      nReps = 1
      Selected rows = 20:40
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      conditions:
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      Routine trialsRuleB
    LoopTerminator stimuliRuleBLoop
    Routine instructions5
    LoopInitiator inducersAndStimuliRuleBLoop loopType="TrialHandler"
      conditionsFile = stimuli.xlsx
      loopType = random
      nReps = 2
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      conditions:
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      Routine trialsRuleB
    LoopTerminator inducersAndStimuliRuleBLoop
    Routine instructionsEnd
  LoopTerminator instructionsLoop
